PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEAL_LandmarkPoint
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the SEAL Pointing Task
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        In this task you will be shown a picture of the object

        Your job is to point to the object based on your location

        Click on Start to begin!
    TextboxComponent StartBox
      bold = False
      borderColor = white
      borderWidth = 3
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0, -.35)
      size = .35,.15
      startVal [time (s)] = 0.0
      text = Start
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    MouseComponent mouse
      clickable = StartBox
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating in the SEAL Pointing Task
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  Routine Uppertrial
    ImageComponent image_3
      image [set every repeat] = $imageU
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please point to the object based on where you are standing
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    ButtonComponent button_2
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-.35)
      size = .33,.15
      startVal [time (s)] = 0
      text = Continue
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  Routine blank
  Routine trial
    ImageComponent image_2
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Please point to the object based on where you are standing
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    ButtonComponent button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.35)
      size = (.33,.15)
      startVal [time (s)] = 0
      text = Continue
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Flow
  Routine Intro
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PointingStims.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'PointingImages/Landmark_12.JPG'},
      {'image': 'PointingImages/Landmark_11.jPG'},
      {'image': 'PointingImages/Landmark_7.JPG'},
      {'image': 'PointingImages/Landmark_8.JPG'},
      {'image': 'PointingImages/Landmark_9.JPG'},
      {'image': 'PointingImages/Landmark_10.JPG'},
      {'image': 'PointingImages/Landmark_3.JPG'},
      {'image': 'PointingImages/Landmark_6.JPG'},
      {'image': 'PointingImages/Landmark_1.JPG'},
      {'image': 'PointingImages/Landmark_4.JPG'},
      {'image': 'PointingImages/Landmark_2.JPG'},
      {'image': 'PointingImages/Landmark_5.JPG'}]
    Routine trial
  LoopTerminator trials
  Routine end
